<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: Hand Eye Calibration" 
      Description="Broadcasting tool tracking data through OpenIGTLink
For NDI Polaris passive marker starting kit and video feed from colour webcam" />
    <Device
      Id="TrackerDevice"
      Type="PolarisTracker"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Stylus" RomFile="Rom Files/GreenStylus.rom"  />
	<DataSource Type="Tool" Id="Webcam" RomFile="Rom Files/LogitechDRB.rom"  />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Stylus"/>
		  <DataSource Id="Webcam"/>
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="VideoDevice" 
      Type="MmfVideo" 
      FrameSize="640 480"
      VideoFormat="YUY2"
      CaptureDeviceId="0" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="UN" ImageType="RGB_COLOR"  />
      </DataSources>      
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
	
	 <Device Id="TrackedDevice" Type="VirtualMixer">
      <InputChannels>
        <InputChannel Id="TrackerStream" /> <!-- tracking info outpu (includes probe, guider and needle)-->
        <InputChannel Id="VideoStream" /> <!-- image adquisition output-->
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="CompleteChannel" /> <!-- output: gives a complete information -->
      </OutputChannels>
	  
	</Device>

    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="CompleteChannel" />
      </InputChannels>
    </Device>
	
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="StylusTip" To="Stylus"
      Matrix="
        1 0 0 132.532 
		0 1 0 -66.2379 
		0 0 1 78.2718 
		0 0 0 1 
		"
       Error="0.19" Date="062122" />
	   
	<Transform From="Image" To="Reference"
      Matrix="
       0.2 0 0 0
	   0 0.2 0 0
	   0 0 0.2 0
	   0 0 0 1" />
  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="CompleteChannel" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
		<Message Type="IMAGE" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="StylusToTracker" />
		<Transform Name="StylusTipToTracker" />
		<Transform Name="WebcamToTracker" />
		<Transform Name="StylusTipToWebcam" />
      </TransformNames>
	  <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
